PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = ExperimentoMeditacion
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Introducción
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    ImageComponent CabeceraSalud
      image = cabeceraSalud.png
      pos = (0, 0.35)
      size = (1.78, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent Título
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Actividad de Meditación
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    TextComponent Explicacion
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Esta actividad de meditación consciente te ayudará a relajarte. Por favor, siéntate en un lugar cómodo y tranquilo para realizar este ejercicio.
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    TextComponent Autor
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Mario de la Arena del Hoyo
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    TextComponent TFG
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Este experimento ha sido realizado como Trabajo Fin de Grado
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    ButtonComponent BotonContinuar
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Continuar
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      callback:
        def on_button_click():
            thisExp.nextEntry()

        if BotonContinuar.status == STARTED:
            if BotonContinuar.contains(mouse):
                on_button_click()
    MouseComponent mouse
      clickable = BotonContinuar
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Pregunta1
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    TextComponent Pregunta_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = ¿Te han interrumpido durante la actividad?
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    ButtonComponent BotonSi
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Si
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    ButtonComponent BotonNo
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = NO
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  Routine Pregunta2
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    TextComponent Pregunta_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = ¿Cómo te encuentras después de haber realizadola actividad?
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    ButtonComponent BotonMuyMal
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Muy Mal
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    ButtonComponent BotonMal
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Mal
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    ButtonComponent BotonNormal
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Normal
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    ButtonComponent BotonBien
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Bien
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    ButtonComponent BotonMuyBien
      bold = True
      borderColor = -0.5059, -0.7098, 0.0824
      fillColor = 0.0980, 0.6157, 1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Muy Bien
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  Routine VideoMeditacion
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    MovieComponent AudioMeditacion
      backend = ffpyplayer
      forceEndRoutine = True
      movie = C:/Users/super/OneDrive/Escritorio/Curso 23-24/TFG/SesionMeditacion.mp4
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 237
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    EmotivRecordingComponent cortex_rec plugin="psychopy-emotiv"
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 237
      syncScreenRefresh = False
Flow
  Routine Introducción
  Routine VideoMeditacion
  Routine Pregunta1
  Routine Pregunta2
